states("Membrane",
       V=ScalarParam(-35, ge=-200, le=50, unit="mV", description="Membrane potential"))

states("Na current I_Na",
       m=2.4676e-4, h=0.99869, j=0.99887)

states("Rapid-activating delayed rectifier K current I_Kr",
       xKr=0.6935)

states("Slow-activating delayed rectifier K current I_Ks",
       xKs=1.4589e-4)

states("Transient outward K current I_to",
       xto1=3.742e-5, yto1=1)

states("Intracellular K",
       K_i=159.48)

states("Intracellular Ca",
       Ca_i=8.464e-5, Ca_NSR=0.2620, Ca_ss=1.315e-4, Ca_JSR=0.2616, \
       LTRPNCa=5.5443e-3, HTRPNCa=136.64e-3)

states("RyR Channel",
       C1_RyR=0.4929, O1_RyR=6.027e-4, O2_RyR=2.882e-9, C2_RyR=0.5065)

states("L-type Ca Channel", 
       yCa=0.7959)

markov_model("lcc", "L-type Ca Channel", algebraic_sum=1.0,
             C0=0.99802,
             C1=4.6456e-6,
             C2=1.9544e-6,
             C3=0.,
             C4=0.,
             Open=0.,
             CCa0=1.9734e-3,
             CCa1=0.,
             CCa2=0.,
             CCa3=0.,
             CCa4=0.)

parameters("Cell geometry",
           ist=0.,
           C_sc  = 1.00,
           A_cap = 1.534e-4,
           V_myo = ScalarParam(25.84e-6, gt=0, unit="ul", description="Volume of cytosol"),
           V_JSR = 0.16e-6,
           V_NSR = 2.1e-6,
           V_ss  = 1.2e-9,
           )

parameters("Ionic concentrations",
           K_o  = 4.0,
           Na_o = 138.0,
           Ca_o = 2.0,
           Na_i = 10.0,
           )

parameters("Na current I_Na",
           G_NaMax = 12.8,
           )          

parameters("Rapid-activating delayed rectifier K current I_Kr",
           G_KrMax = 0.0034,
           )

parameters("Slow-activating delayed rectifier K current I_Ks",
           G_KsMax = 0.00271,
           )

parameters("Transient outward K current I_to",
           G_toMax = 0.23815,
           )

parameters("Time-Independent K current I_ti",
           G_tiMax = 2.8,
           K_mK1   = 13.0,
           )

parameters("Plateau current I_Kp",
           G_KpMax = 0.002216,
           )

parameters("NCX Current I_NaCa",
           k_NaCa  = 0.30,
           K_mNa   = 87.5,
           K_mCa   = 1.38,
           k_sat   = 0.2,
           eta     = 0.35,
           )

parameters("Na-K pump current I_NaK",
           I_NaKMax= 0.693,
           K_mNai  = 10.0,
           K_mKo   = 1.5,
           )

parameters("Sarcolemmal Ca pump current I_pCa",
           I_pCaMax= 0.05,
           K_mpCa  = 0.00005,
           )

parameters("Ca background current I_bCa",
           G_bCaMax= 0.0003842,
           )

parameters("Na background current I_bNa",
           G_bNaMax= 0.0031,
           )

parameters("Intracellular Ca", 
           tau_tr  = 0.5747,
           tau_xfer= 26.7,
           LTRPNtot   = 70e-3,
           HTRPNtot   = 140e-3,
           khtrpn_plus = 20.0,
           khtrpn_minus= 66.0e-6,
           kltrpn_plus = 40.0,
           kltrpn_minus= 0.040,
           CMDNtot    = 50e-3,
           CSQNtot    = 15.0,
           EGTAtot    = 10.0,
           KmCMDN     = 2.38e-3,
           KmCSQN     = 0.8,
           KmEGTA     = 0.15e-3,
           )

parameters("L-type Ca Channel",
           fL     = 0.3,
           gL     = 2.0,
           bL     = 2.0,
           aL     = 2.0,
           omega  = 0.01,
           PCa = 3.125e-4,
           PK  = 5.79e-7,
           ICahalf= -0.265,
           )

parameters("RyR Channel",
           kaplus = 0.01215,
           kaminus= 0.576,
           kbplus = 0.00405,
           kbminus= 1.930,
           kcplus = 0.100,
           kcminus= 0.0008,
           v_1     = 1.8,
           ncoop   = 4.0,
           mcoop   = 3.0,
           )
parameters("SERCA2a Pump",
           K_fb    = 0.168e-3,
           K_rb    = 3.29,
           K_SR    = 1.0,
           N_fb    = 1.2,
           N_rb    = 1.0,
           v_maxf  = 0.813e-4,
           v_maxr  = 0.318e-3,
           )

component("Membrane")
comment("Constants")
F       = 96.500
T       = 310
R       = 8.314
RTonF   = R*T/F
FonRT   = F/(R*T)
VFonRT = V*FonRT
expVFonRT = exp(VFonRT)

component("Ionic concentrations")
E_Na = RTonF*log(Na_o/Na_i)
E_k  = RTonF*log(K_o/K_i)
E_Ca  = RTonF/2*log(Ca_o/Ca_i)

component("Na current I_Na")
I_Na = G_NaMax*m**3*h*j*(V-E_Na)

a_h = Conditional(Ge(V, -40), 0.0, 0.135*exp((80+V)/(-6.8)))
b_h = Conditional(Ge(V, -40), 1./(0.13*(1+exp((V+10.66)/(-11.1)))), \
                  3.56*exp(0.079*V)+3.1e5*exp(0.35*V))

a_j = Conditional(Ge(V, -40), 0.0, (-1.2714e5*exp(0.2444*V)-3.474e-5*exp(-0.04391*V))\
                  *(V+37.78)/(1+exp(0.311*(V+79.23))))
b_j = Conditional(Ge(V, -40), 0.3*exp(-2.535e-7*V)/(1+exp(-0.1*(V+32))),
                  0.1212*exp(-0.01052*V)/(1+exp(-0.1378*(V+40.14))))

a_m = 0.32*(V+47.13)/(1-exp(-0.1*(V+47.13)))
b_m = 0.08*exp(-V/11)

component("Rapid-activating delayed rectifier K current I_Kr")

k12 = exp(-5.495+0.1691*V)
k21 = exp(-7.677-0.0128*V)

xKr_inf = k12/(k12+k21)
tau_xKr = 1.0/(k12+k21) + 27.0

dxKr = (xKr_inf-xKr)/tau_xKr

R_V  = 1./(1+1.4945*exp(0.0446*V))
f_k  = sqrt(K_o/4.)

I_Kr = G_KrMax*f_k*R_V*xKr*(V-E_k)

component("Slow-activating delayed rectifier K current I_Ks")
xKs_inf = 1.0/(1.0+exp(-(V-24.70)/13.60))
tau_xKs = 1.0/( 7.19e-5*(V-10.0)/(1.0-exp(-0.1480*(V-10.0))) + 1.31e-4*(V-10.0)/(exp(0.06870*(V-10.0))-1.0))
dxKs = (xKs_inf-xKs)/tau_xKs

E_Ks = RTonF*log((K_o+0.01833*Na_o)/(K_i+0.01833*Na_i))
I_Ks = G_KsMax*(xKs**2)*(V-E_Ks)

component("Transient outward K current I_to")
alpha_xto1 = 0.04516*exp(0.03577*V)
beta_xto1  = 0.0989*exp(-0.06237*V)
a1 = 1.0+0.051335*exp(-(V+33.5)/5.0)
alpha_yto1 = 0.005415*exp(-(V+33.5)/5.0)/a1
a1 = 1.0+0.051335*exp((V+33.5)/5.0)
beta_yto1 = 0.005415*exp((V+33.5)/5.0)/a1

dxto1 = alpha_xto1*(1.e0-xto1)-beta_xto1*xto1
dyto1 = alpha_yto1*(1.e0-yto1)-beta_yto1*yto1

I_to = G_toMax*xto1*yto1*(V-E_k)

component("Time-Independent K current I_ti")
K_tiUnlim = 1./(2+exp(1.5*(V-E_k)*FonRT))

I_ti = G_tiMax*K_tiUnlim*(K_o/(K_o+K_mK1))*(V-E_k)

component("Plateau current I_Kp")
K_p  = 1./(1+exp((7.488-V)/5.98))
I_Kp = G_KpMax*K_p*(V-E_k)

component("NCX Current I_NaCa")
I_NaCa = k_NaCa*(5000/(K_mNa**3+Na_o**3))*(1./(K_mCa+Ca_o))*\
         (1./(1+k_sat*exp((eta-1)*VFonRT)))*\
         (exp(eta*VFonRT)*Na_i**3*Ca_o-exp((eta-1)*VFonRT)*Na_o**3*Ca_i)

component("Na-K pump current I_NaK")
sigma = 1./7*(exp(Na_o/67.3)-1)
f_NaK = 1./(1+0.1245*exp(-0.1*VFonRT)+0.0365*sigma*exp(-VFonRT))

I_NaK = I_NaKMax*f_NaK*1./(1+(K_mNai/Na_i)**1.5)*K_o/(K_o+K_mKo)


component("Sarcolemmal Ca pump current I_pCa")
I_pCa = I_pCaMax*Ca_i/(K_mpCa+Ca_i)

component("Ca background current I_bCa")
I_bCa = G_bCaMax*(V-E_Ca)

component("Na background current I_bNa")
I_bNa = G_bNaMax*(V-E_Na)

component("L-type Ca Channel")

alpha = 0.4*exp((V+2.0)/10.0)
beta  = 0.05*exp(-(V+2.0)/13.0)
gamma = 0.10375*Ca_ss

# Help list of LCC closed state variables
normal_mode_states = [C0, C1, C2, C3, C4]
Ca_mode_states = [CCa0, CCa1, CCa2, CCa3, CCa4]

# Two lists of states give meaning to the connectivity matrix on the rhs
lcc[normal_mode_states, normal_mode_states] = \
        Matrix(5, 5, lambda i, j: (4-i)*alpha if j-i == 1 else \
               (i*beta if i-j == 1 else 0))

# With only one list of states if is interpreted as a symetric two lists.
lcc[Ca_mode_states] = Matrix(5, 5, lambda i, j: (4-i)*alpha*aL \
                             if j-i == 1 else (i*beta/bL if i-j == 1 else 0))

for ind, (normal, Ca_mode) in enumerate(zip(normal_mode_states, \
                                            Ca_mode_states)):

    lcc[normal, Ca_mode] = gamma*aL**ind
    lcc[Ca_mode, normal] = omega/bL**ind
    
lcc[C4, Open] = fL
lcc[Open, C4] = gL

yCa_inf = 0.80/(1.0+exp((V + 12.5)/5.0)) + 0.2
tau_yCa = 20.0 + 600.0 / (1.0 + exp((V+20.0)/9.50))
dyCa = (yCa_inf-yCa)/tau_yCa

VFsqonRT=(1000.0*F)*VFonRT

a1 =  1.0e-3*exp(2.0*VFonRT)-Ca_o*0.341 
a2 =  exp(2.0*VFonRT)-1.0
ICamax = PCa*4.0*VFsqonRT*(a1/a2)
I_Ca = ICamax*yCa*Open

PKprime = PK/(1.0+(Min(0.0, ICamax)/ICahalf ))
a1 = K_i*expVFonRT-K_o
a2 = expVFonRT-1.0
I_CaK = PKprime*Open*yCa*VFsqonRT*(a1/a2)

component("RyR Channel")
a1 = (Ca_ss*1000.0)**mcoop
a2 = (Ca_ss*1000.0)**ncoop
dC1_RyR = -kaplus*a2*C1_RyR+kaminus*O1_RyR
dO2_RyR =  kbplus*a1*O1_RyR - kbminus*O2_RyR
dC2_RyR =  kcplus*O1_RyR - kcminus*C2_RyR 
dO1_RyR = -(dC1_RyR + dO2_RyR + dC2_RyR)

J_rel = v_1*(O1_RyR+O2_RyR)*(Ca_JSR-Ca_ss)

component("SERCA2a Pump")
f_b = (Ca_i/K_fb)**N_fb
r_b = (Ca_NSR/K_rb)**N_rb

J_up = K_SR*(v_maxf*f_b-v_maxr*r_b)/(1+f_b+r_b)

component("Intracellular Ca")
J_tr = (Ca_NSR-Ca_JSR)/tau_tr
J_xfer = (Ca_ss-Ca_i)/tau_xfer


a1 = kltrpn_minus * LTRPNCa
dLTRPNCa = kltrpn_plus*Ca_i*(1.0 - LTRPNCa) - a1

a1 = khtrpn_minus * HTRPNCa
dHTRPNCa = khtrpn_plus*Ca_i*(1.0 - HTRPNCa) - a1
	
J_trpn = LTRPNtot*dLTRPNCa+HTRPNtot*dHTRPNCa
 
a1 = CMDNtot*KmCMDN/((Ca_ss+KmCMDN)**2.0)
#a2 = 0
beta_ss = 1.e0/(1.0+a1)#+a2) 
		
a1 = CSQNtot*KmCSQN/((Ca_JSR+KmCSQN)**2.0)
beta_JSR = 1.0/(1.0+a1)

a1 = CMDNtot*KmCMDN/((Ca_i+KmCMDN)**2.e0)
#a2 = 0
beta_i = 1.0/(1.0+a1)#+a2)

dV_dt = -(I_Na+I_Ca+I_CaK+I_Kr+I_Ks+I_to+I_ti+I_Kp+I_NaCa+I_NaK+I_pCa+I_bCa+I_bNa+ist)
dm_dt = Conditional(Ge(V, -90), a_m*(1-m)-b_m*m, 0.0)
dh_dt = a_h*(1-h)-b_h*h
dj_dt = a_j*(1-j)-b_j*j
dxKr_dt = dxKr
dxKs_dt = dxKs
dxto1_dt = dxto1
dyto1_dt = dyto1
dK_i_dt = -(I_Kr+I_Ks+I_to+I_ti+I_Kp+I_CaK-2*I_NaK)*A_cap*C_sc/(V_myo*1000*F)
dCa_i_dt = beta_i*(J_xfer-J_up-J_trpn-(I_bCa-2*I_NaCa+I_pCa)*A_cap*C_sc/(2*V_myo*1000*F))
dCa_NSR_dt = J_up*V_myo/V_NSR-J_tr*V_JSR/V_NSR
dCa_ss_dt = beta_ss*(J_rel*V_JSR/V_ss-J_xfer*V_myo/V_ss-I_Ca*A_cap*C_sc/(2*V_ss*1000*F))
dCa_JSR_dt = beta_JSR*(J_tr-J_rel)
dC1_RyR_dt = dC1_RyR
dO1_RyR_dt = dO1_RyR
dO2_RyR_dt = dO2_RyR
dC2_RyR_dt = dC2_RyR
dyCa_dt = dyCa
dLTRPNCa_dt = dLTRPNCa
dHTRPNCa_dt = dHTRPNCa
